PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  expName = gratingHA_v2
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        import random
      Begin Experiment:
        contrast_levels = [0.50, 0.25, 0.12, 0.06, 0.00]
        xside = ["Left", "Right"]
      Begin Routine:
        contrast = random.choice(contrast_levels)
        side = random.choice(xside)

        if side == "Left":
            position_x = -0.5
            correct =  'd'
        elif side == "Right":
            position_x = 0.5
            correct =  'k'
      End Routine:
        thisExp.addData("contrast", contrast)
        thisExp.addData("side", side)
    GratingComponent grating
      contrast [set every repeat] = contrast
      mask = circle
      ori = 45
      pos [set every repeat] = (position_x, 0)
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'd','k'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = fullRandom
    nReps = 6
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    conditions:
      [{'side': 'Left', 'correct': 'd'},
      {'side': 'Right', 'correct': 'k'},
      {'side': None, 'correct': None}]
    Routine trial
  LoopTerminator trials
