PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  colPriority = {'contrast': '30', 'side': '29', 'response': '28', 'answer': '27', 'rt': '26', 'thisRow.t': '1'}
  consoleLoggingLevel = data
  expName = gratingHA_v4
  keyboardBackend = ioHub
  logging level = data
  measureFrameRate = False
  runMode = 0
  sortColumns = priority
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Routines
  Routine text
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Second Trial

        wait for start
  Routine routine_50_50
    RoutineSettingsComponent routine_50_50
      saveStartStop = False
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        import random
      Begin Experiment:
        contrast_levels = [0.50, 0.25, 0.12, 0.06, 0.00]
        xside = ["Left", "Right"]
      Begin Routine:
        contrast = random.choice(contrast_levels)
        side = random.choice(xside)

        if side == "Left":
            position_x = -0.5
            correct =  'd'
        elif side == "Right":
            position_x = 0.5
            correct =  'k'
      End Routine:
        thisExp.addData("contrast", contrast)
        thisExp.addData("side", side)
        thisExp.addData("response", key_resp.keys)
        thisExp.addData("answer", key_resp.corr)
        thisExp.addData("rt", key_resp.rt)
    GratingComponent grating
      contrast [set every repeat] = contrast
      mask = circle
      ori = 45
      pos [set every repeat] = (position_x, 0)
      saveStartStop = False
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'd','k'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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  Routine routine_80_20
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        contrast_levels = [0.50, 0.25, 0.12, 0.06, 0.00]
        xside = ["Left", "Right"]
      Begin Routine:
        contrast = random.choice(contrast_levels)
        side = random.choices(xside, weights =[0.8, 0.2])[0]
        if side == "Left":
            position_x = -0.5
            correct =  'd'
        elif side == "Right":
            position_x = 0.5
            correct =  'k'
      End Routine:
        thisExp.addData("contrast", contrast)
        thisExp.addData("side", side)
        thisExp.addData("response", key_resp_2.keys)
        thisExp.addData("answer", key_resp_2.corr)
        thisExp.addData("rt", key_resp_2.rt)



        #filtered_data = {
           # "contrast": contrast,
            #"side": side,
            #"response": key_resp.keys,
           # "answer": correct,
           # "rt": key_resp.rt
        #}
        #thisExp.addData('filtered_data', str(filtered_data))
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    GratingComponent grating_2
      contrast [set every repeat] = contrast
      mask = circle
      ori = 45
      pos [set every repeat] = (position_x, 0)
      saveStartStop = False
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'd','k'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = fullRandom
    nReps = 6
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    conditions:
      [{'side': 'Left', 'correct': 'd'},
      {'side': 'Right', 'correct': 'k'},
      {'side': None, 'correct': None}]
    Routine routine_50_50
  LoopTerminator trials
  Routine text
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = fullRandom
    nReps = 6
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    Routine routine_80_20
  LoopTerminator trials_2
