PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  colPriority = {'contrast': '30', 'side': '29', 'response': '28', 'answer': '27', 'rt': '26', 'eval': '25', 'score': '24', 'thisRow.t': '1'}
  consoleLoggingLevel = data
  expName = gratingHA_v7
  keyboardBackend = ioHub
  logging level = data
  measureFrameRate = False
  runMode = 0
  sortColumns = priority
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Routines
  Routine text
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Second Trial

        wait for start
  Routine routine_50_50
    RoutineSettingsComponent routine_50_50
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        contrast_levels = [0.50, 0.25, 0.12, 0.06, 0.00]
        xside = ["Left", "Right"]
        score=0
      Begin Routine:
        contrast = random.choice(contrast_levels)
        side = random.choice(xside)

        if trials.thisTrialN==0:
            score=0

        if side == "Left":
            position_x = -0.5
            correct =  'd'
        elif side == "Right":
            position_x = 0.5
            correct =  'k'
      End Routine:
        if not key_resp.keys:
              thisExp.addData("response", "None")
              key_resp.corr=0
              #thisExp.addData("eval", 2)
              eval=2
        else:
             thisExp.addData("response", key_resp.keys)
             eval=key_resp.corr
             #thisExp.addData("eval", key_resp.corr)

        if eval==1:
            score+=1

        thisExp.addData("contrast", contrast)
        thisExp.addData("side", side)
        #thisExp.addData("response", key_resp.keys)
        thisExp.addData("answer", key_resp.corr)    #em answer nao resposta=0
        thisExp.addData("eval", eval)               #em eval nao resposta=2 / usar em feedback
        thisExp.addData("score", score)
        thisExp.addData("rt", key_resp.rt if key_resp.rt else "None")
    GratingComponent grating
      contrast [set every repeat] = contrast
      mask = circle
      ori = 45
      pos [set every repeat] = (position_x, 0)
      saveStartStop = False
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'd','k'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    PolygonComponent polygon
      fillColor = white
      lineWidth = 2
      ori = 45
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent polygon_2
      fillColor = white
      lineWidth = 2
      ori = 135
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine routine_80_20
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        contrast_levels = [0.50, 0.25, 0.12, 0.06, 0.00]
        xside = ["Left", "Right"]
        score=0
      Begin Routine:
        contrast = random.choice(contrast_levels)
        #contrast = random.choices(contrast_levels, weights= [1,1,1,1,2])[0]
        side = random.choices(xside, weights =[0.8, 0.2])[0]

        if trials_2.thisTrialN==0:
            score=0


        if side == "Left":
            position_x = -0.5
            correct =  'd'
        elif side == "Right":
            position_x = 0.5
            correct =  'k'
      End Routine:
        if not key_resp_2.keys:
              thisExp.addData("response", "None")
              key_resp_2.corr=0
              #thisExp.addData("eval", 2)
              eval=2
        else:
             thisExp.addData("response", key_resp_2.keys)
             eval=key_resp_2.corr
             #thisExp.addData("eval", key_resp_2.corr)

        if eval==1:
            score+=1

        thisExp.addData("contrast", contrast)
        thisExp.addData("side", side)
        #thisExp.addData("response", key_resp_2.keys)
        thisExp.addData("answer", key_resp_2.corr)    #em answer nao resposta=0
        thisExp.addData("eval", eval)               #em eval nao resposta=2 / usar em feedback
        thisExp.addData("score", score)
        thisExp.addData("rt", key_resp_2.rt if key_resp_2.rt else "None")
    GratingComponent grating_2
      contrast [set every repeat] = contrast
      mask = circle
      ori = 45
      pos [set every repeat] = (position_x, 0)
      saveStartStop = False
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'd','k'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    PolygonComponent polygon_3
      fillColor = white
      lineWidth = 2
      ori = 45
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent polygon_4
      fillColor = white
      lineWidth = 2
      ori = 135
      shape = line
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine feedback
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if  eval==1:
            text_feedback="Correct!"
            win.color="green"
            sound_feedback=400
            volume=1

        elif  eval==0:
            text_feedback="Wrong!"
            win.color="red"
            sound_feedback=1000
            volume=1

        elif  eval==2:
            text_feedback="No Response"
            volume=0
            sound_feedback=None
        win.flip()
      End Routine:
        win.color="none"
        win.flip()
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $text_feedback
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    SoundComponent sound_1
      saveStartStop = False
      sound [set every repeat] = $sound_feedback
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      volume [set every repeat] = volume
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = fullRandom
    nReps = 6
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    conditions:
      [{'side': 'Left', 'correct': 'd'},
      {'side': 'Right', 'correct': 'k'},
      {'side': None, 'correct': None}]
    Routine routine_50_50
    Routine feedback
  LoopTerminator trials
  Routine text
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = fullRandom
    nReps = 6
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    Routine routine_80_20
    Routine feedback
  LoopTerminator trials_2
