PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  consoleLoggingLevel = exp
  expName = gratingHAx2
  keyboardBackend = ioHub
  logging level = data
  measureFrameRate = False
  runMode = 0
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Routines
  Routine routine_80_20
    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        import random
      Begin Experiment:
        contrast_levels = [0.50, 0.25, 0.12, 0.06, 0.00]
        positions= [-0.5, 0.5]
      Begin Routine:
        contrast = random.choice(contrast_levels)
        position_x = random.choices(positions, weights=[0.8, 0.2])[0]
      End Routine:
        thisExp.addData("grating_position", side)
        thisExp.addData("contrast", contrast)
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    GratingComponent grating_2
      contrast [set every repeat] = contrast
      mask = circle
      ori = 45
      pos [set every repeat] = (position_x, position_y)
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'd','k'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine routine_50_50
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        import random
      Begin Experiment:
        contrast_levels = [0.50, 0.25, 0.12, 0.06, 0.00]
      Begin Routine:
        contrast = random.choice(contrast_levels)
      End Routine:
        thisExp.addData("grating_position", side)
        thisExp.addData("contrast", contrast)
    GratingComponent grating
      contrast [set every repeat] = contrast
      mask = circle
      ori = 45
      pos [set every repeat] = (position_x, position_y)
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'd','k'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loopTemplate1.xlsx
    loopType = fullRandom
    nReps = 3
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    conditions:
      [{'position_x': -0.5, 'side': 'Left', 'correct': 'd'},
      {'position_x': 0.5, 'side': 'Right', 'correct': 'k'}]
    Routine routine_50_50
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = loopTemplate1.xlsx
    loopType = fullRandom
    nReps = 3
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    conditions:
      [{'position_x': -0.5, 'position_y': 0, 'side': 'Left', 'correct': 'd'},
      {'position_x': 0.5, 'position_y': 0, 'side': 'Right', 'correct': 'k'},
      {'position_x': None, 'position_y': None, 'side': None, 'correct': None}]
    Routine routine_80_20
  LoopTerminator trials_2
